{
  "DicomAet" : "${ORTHANC_RAW_AE_TITLE}",

  "DicomModalities" : {
    "UCPRIMARYQR" : {
      "AET" : "${PRIMARY_DICOM_SOURCE_AE_TITLE}",
      "Port" : "${PRIMARY_DICOM_SOURCE_PORT}",
      "Host" : "${PRIMARY_DICOM_SOURCE_IP_ADDR}",
      "Manufacturer" : "Generic",
      "AllowEcho" : true,
      "AllowFind" : false,
      "AllowFindWorklist" : false,
      "AllowGet"  : false,
      "AllowMove" : false,
      "AllowStore" : true,
      "AllowStorageCommitment" : false,
      "AllowTranscoding" : true,
      "UseDicomTls" : false,
      "Timeout" : 60
    },
    "UCSECONDARYQR" : {
      "AET" : "${SECONDARY_DICOM_SOURCE_AE_TITLE}",
      "Port" : "${SECONDARY_DICOM_SOURCE_PORT}",
      "Host" : "${SECONDARY_DICOM_SOURCE_IP_ADDR}",
      "Manufacturer" : "Generic",
      "AllowEcho" : true,
      "AllowFind" : false,
      "AllowFindWorklist" : false,
      "AllowGet"  : false,
      "AllowMove" : false,
      "AllowStore" : true,
      "AllowStorageCommitment" : false,
      "AllowTranscoding" : true,
      "UseDicomTls" : false,
      "Timeout" : 1800
    },
    "PIXL-Anon" : {
      "AET" : "${ORTHANC_ANON_AE_TITLE}",
      "Port" : "${ORTHANC_ANON_DICOM_PORT}",
      "Host" : "${ORTHANC_ANON_HOSTNAME}",
      "Manufacturer" : "Generic",
      "AllowEcho" : true,
      "AllowFind" : true,
      "AllowFindWorklist" : false,
      "AllowGet"  : false,
      "AllowMove" : true,
      "AllowStore" : false,
      "AllowStorageCommitment" : false,
      "AllowTranscoding" : true,
      "UseDicomTls" : false,
      "Timeout" : 600
    }
  },

  // Check whether the called AET corresponds to the AET of Orthanc
  // during an incoming DICOM SCU request
  "DicomCheckCalledAet" : true,

  // Whether Orthanc accepts to act as C-STORE SCP for unknown storage
  // SOP classes (aka. "promiscuous mode")
  "UnknownSopClassAccepted" : true,

  // Whether the Orthanc SCP allows incoming C-ECHO requests, even
  // from SCU modalities it does not know about (i.e. that are not
  // listed in the "DicomModalities" option above). Orthanc 1.3.0
  // is the only version to behave as if this argument were set to "false".
  "DicomAlwaysAllowEcho" : true,

  // Whether the Orthanc SCP allows incoming C-STORE requests, even
  // from SCU modalities it does not know about (i.e. that are not
  // listed in the "DicomModalities" option above)
  "DicomAlwaysAllowStore" : true,

  // Whether the Orthanc SCP allows incoming C-FIND requests, even
  // from SCU modalities it does not know about (i.e. that are not
  // listed in the "DicomModalities" option above). Setting this
  // option to "true" implies security risks. (new in Orthanc 1.9.0)
  // Note: From Orthanc 1.10.0, this option only applies to C-FIND
  // requests for patients/studies/series/instances. Use option
  // "DicomAlwaysAllowFindWorklist" for worklists.
  "DicomAlwaysAllowFind" : false,

  // Whether the Orthanc SCP allows incoming C-FIND requests for worklists, 
  // even from SCU modalities it does not know about (i.e. that are not
  // listed in the "DicomModalities" option above). Setting this
  // option to "true" implies security risks. (new in Orthanc 1.10.0)
  "DicomAlwaysAllowFindWorklist" : false,

  // Whether the Orthanc SCP allows incoming C-GET requests, even
  // from SCU modalities it does not know about (i.e. that are not
  // listed in the "DicomModalities" option above). Setting this
  // option to "true" implies security risks. (new in Orthanc 1.9.0)
  "DicomAlwaysAllowGet" : false,

  // Whether the Orthanc SCP allows incoming C-MOVE requests, even
  // from SCU modalities it does not know about (i.e. that are not
  // listed in the "DicomModalities" option above). Setting this
  // option to "true" implies security risks. (new in Orthanc 1.9.7)
  "DicomAlwaysAllowMove" : false,

  // Whether Orthanc checks the IP/hostname address of the remote
  // modality initiating a DICOM connection (as listed in the
  // "DicomModalities" option above). If this option is set to
  // "false", Orthanc only checks the AET of the remote modality.
  "DicomCheckModalityHost" : false,

  // Overwrite instances with the same UID
  // This allows us to set the project name tag in-place without modifying the
  //StudyInstanceUID, SeriesInstanceUID, and SOPInstanceUID
  "OverwriteInstance": true

}
